opentrons/protocol-designer 6.2.0
schemaVersion: 6
protocolName: Creating Glycerol Stocks in FluidX Tubes
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 7}
  FluidX 1: {definitionId: custom_beta/96tubesrackfluidx_96_wellplate_700ul/1, location: 1}
  FluidX 2: {definitionId: custom_beta/96tubesrackfluidx_96_wellplate_700ul/1, location: 2}
  Colony Plate 1: {definitionId: custom_beta/4titude_96_wellplate_2200ul/1, location: 5}
  Glycerol: {definitionId: opentrons/agilent_1_reservoir_290ml/1, location: 4}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 10}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Glycerol
  - Cell Suspension
ingredLocations:
  Colony Plate 1:
    Cell Suspension {volume: 1500}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  Glycerol:
    Glycerol {volume: 150000}: A1
savedStepForms:
- stepType: pause
  stepName: set deck up
  pauseAction: untilResume
  pauseMessage: Please set-up the deck as per the layout.
- stepType: moveLiquid
  stepName: transfer glycerol to fluidx 1 tubes - column 1 with pre-wet
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: once
  aspirate_labware: Glycerol
  aspirate_wells: A1
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A1
  dispense_mmFromBottom: 4.5
  blowout_checkbox: true
  blowout_location: dest_well
  preWetTip: true
- stepType: moveLiquid
  stepName: transfer glycerol to fluidx 1 tubes - column 2-12
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Glycerol
  aspirate_wells: A1
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A2-A12
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer glycerol to fluidx 2 tubes
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Glycerol
  aspirate_wells: A1
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A1-A12
  dispense_mmFromBottom: 5.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: DNA Transfer Column 1
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A1
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  dispense_mmFromBottom: 1.5
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 1
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A1
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 2
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Colony Plate 1
  aspirate_wells: A2
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 2
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A2
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 3
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A3
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 3
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A3
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 4
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Colony Plate 1
  aspirate_wells: A4
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 4
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A4
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 5
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A5
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 100
  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 5
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A5
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 6
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Colony Plate 1
  aspirate_wells: A6
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 6
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A6
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 7
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A7
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 7
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A7
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 8
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A8
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 8
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A8
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 9
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A9
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 9
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A9
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 10
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A10
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 10
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A10
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 11
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A11
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 11
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A11
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 12
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate 1
  aspirate_wells: A12
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 1
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: moveLiquid
  stepName: DNA Transfer Column 12
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: never
  aspirate_labware: Colony Plate 1
  aspirate_wells: A12
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  aspirate_mmFromBottom: 3
  dispense_labware: FluidX 2
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 100
  preWetTip: true
- stepType: pause
  stepName: complete
  pauseAction: untilResume
  pauseMessage: The protocol is now complete.
labwareDefinitions:
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  custom_beta/96tubesrackfluidx_96_wellplate_700ul/1:
    brand: {brand: 96 Tubes Rack FluidX, brandId: [FluidX/68-0702-12N]}
    metadata: {displayName: 96 Tubes Rack FluidX 96 Well Plate 700 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 30}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 96tubesrackfluidx_96_wellplate_700ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 20, totalLiquidVolume: 700, shape: circular, diameter: 6.5, x: 14, y: 74, z: 10}
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  custom_beta/4titude_96_wellplate_2200ul/1:
    brand: {brand: 4titude, brandId: [4ti-0132]}
    metadata: {displayName: 4titude 2.2ml Deep Well Plate 4ti-0132, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.6, yDimension: 85.5, zDimension: 43.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 4titude_96_wellplate_2200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 40, totalLiquidVolume: 2200, shape: rectangular, xDimension: 7.8, yDimension: 7.8, x: 14.5, y: 74.5, z: 3.4}
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commands:
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- delay: {message: Please set-up the deck as per the layout., waitForResume: true}
- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 250, labwareId: Glycerol, wellName: A1, wellLocation: {origin: bottom, offset: {z: 3}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 250, labwareId: Glycerol, wellName: A1, wellLocation: {origin: bottom, offset: {z: 3}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 250, labwareId: Glycerol, wellName: A1, wellLocation: {origin: bottom, offset: {z: 3}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 250, labwareId: FluidX 1, wellName: A1, wellLocation: {origin: bottom, offset: {z: 4.5}}, flowRate: 94}
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