opentrons/protocol-designer 6.2.0
schemaVersion: 6
protocolName: PCR Purification Using Magnetic Beads
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: left}
  p300_multi_gen2: {mount: right}
modules:
  magneticModuleV2: {location: 4}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 11}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 3}
  PCR Samples: {definitionId: custom_beta/4titude_96_wellplate_200ul/1, location: magneticModuleV2}
  Reagent Plate: {definitionId: custom_beta/starlab_12_reservoir_22000ul/1, location: 7}
  Elution Plate: {definitionId: custom_beta/4titude_96_wellplate_200ul/1, location: 10}
  Waste: {definitionId: opentrons/agilent_1_reservoir_290ml/1, location: 1}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 2}
  Opentrons 96 Tip Rack 300 µL (2): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 5}
  Opentrons 96 Tip Rack 300 µL (3): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 6}
  Opentrons 96 Tip Rack 300 µL (4): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 8}
  Opentrons 96 Tip Rack 300 µL (5): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 9}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Beads
  - PCR Product: {serialize: true}
  - Ethanol Wash
  - Elution Buffer
ingredLocations:
  PCR Samples:
    PCR Product {volume: 20}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  Reagent Plate:
    Beads {volume: 20000}: A1
    Ethanol Wash {volume: 20000}: A3, A4
    Elution Buffer {volume: 20000}: A6
savedStepForms:
- stepType: moveLiquid
  stepName: bead transfer
  pipette: p300_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Reagent Plate
  aspirate_wells: A1
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  aspirate_flowRate: 150
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 150
  aspirate_mmFromBottom: 4
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  aspirate_delay_checkbox: true
  aspirate_delay_mmFromBottom: 31
  aspirate_delay_seconds: 2
  dispense_labware: PCR Samples
  dispense_wells: A1-A12
  dispense_flowRate: 150
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 40
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: magnet
  stepName: magnet engage
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 8
- stepType: pause
  stepName: bead formation
  pauseAction: untilTime
  pauseMinute: 1
  pauseMessage: 1 min to allow beads to form pellet
- stepType: moveLiquid
  stepName: transfer SN to waste
  pipette: p300_multi_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: PCR Samples
  aspirate_wells: A1-A12
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  aspirate_flowRate: 20
  aspirate_mmFromBottom: 2
  dispense_labware: Waste
  dispense_wells: A1
  dispense_mmFromBottom: 15
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: ethanol transfer
  pipette: p300_multi_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: Reagent Plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 4
  dispense_labware: PCR Samples
  dispense_wells: A1-A12
  dispense_mmFromBottom: 16
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer ethanol to waste
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: PCR Samples
  aspirate_wells: A1-A12
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  aspirate_flowRate: 20
  aspirate_mmFromBottom: 2
  dispense_labware: Waste
  dispense_wells: A1
  dispense_mmFromBottom: 15
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: empty waste
  pauseAction: untilResume
  pauseMessage: Empty the waste box appropriately.
- stepType: moveLiquid
  stepName: ethanol transfer
  pipette: p300_multi_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: Reagent Plate
  aspirate_wells: A4
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  aspirate_mmFromBottom: 3
  dispense_labware: PCR Samples
  dispense_wells: A1-A12
  dispense_mmFromBottom: 16
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer ethanol to waste
  pipette: p300_multi_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: PCR Samples
  aspirate_wells: A1-A12
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  aspirate_flowRate: 20
  aspirate_mmFromBottom: 2
  dispense_labware: Waste
  dispense_wells: A1
  dispense_mmFromBottom: 15
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: empty waste
  pauseAction: untilResume
  pauseMessage: Empty the waste box appropriately.
- stepType: pause
  stepName: Air dry pellet
  pauseAction: untilTime
  pauseMinute: 30
  pauseMessage: AIr dry for 30 mins to remove residual ethanol.
- stepType: pause
  stepName: check pellet is dry
  pauseAction: untilResume
  pauseMessage: Check the pellet to ensure it is fully dry. If not leave for a further 5 mins.
- stepType: magnet
  stepName: magnet disengage
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer elution buffer
  pipette: p300_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Reagent Plate
  aspirate_wells: A6
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  aspirate_mmFromBottom: 3
  dispense_labware: PCR Samples
  dispense_wells: A1-A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 20
  dispense_mmFromBottom: 3.5
- stepType: magnet
  stepName: magnet engage
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 8
- stepType: pause
  stepName: bead formation
  pauseAction: untilTime
  pauseMinute: 1
  pauseMessage: 1 min to allow beads to form pellet
- stepType: moveLiquid
  stepName: transfer eluate to elution plate
  pipette: p20_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: PCR Samples
  aspirate_wells: A1-A12
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  aspirate_flowRate: 5
  dispense_labware: Elution Plate
  dispense_wells: A1-A12
  dispense_mmFromBottom: 4.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: Protocol complete
  pauseAction: untilResume
  pauseMessage: The protocol is now complete.
labwareDefinitions:
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  custom_beta/4titude_96_wellplate_200ul/1:
    brand: {brand: 4titude, brandId: [4ti-0960/C]}
    metadata: {displayName: 4ti-0960/C 96 Well Full Skirted Plate, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 16.1}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 4titude_96_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 15.1, totalLiquidVolume: 200, shape: circular, diameter: 5.5, x: 14.38, y: 74.24, z: 1}
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  custom_beta/starlab_12_reservoir_22000ul/1:
    brand: {brand: starlab, brandId: [E2310-1200]}
    metadata: {displayName: Starlab 12 Reservoir 22000 µL, displayCategory: reservoir, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 44}
    parameters: {format: irregular, quirks: [centerMultichannelOnWells, touchTipDisabled], isTiprack: false, isMagneticModuleCompatible: false, loadName: starlab_12_reservoir_22000ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 39, totalLiquidVolume: 22000, shape: rectangular, xDimension: 8, yDimension: 71, x: 14, y: 42, z: 5}
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commands:
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- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons 96 Tip Rack 300 µL (1), wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 150, labwareId: Reagent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 4}}, flowRate: 150}
- delay: {seconds: 2}
- dispense: {pipetteId: p300_multi_gen2, volume: 150, labwareId: Reagent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 4}}, flowRate: 150}
- aspirate: {pipetteId: p300_multi_gen2, volume: 150, labwareId: Reagent Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 4}}, flowRate: 150}
- delay: {seconds: 2}
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