opentrons/protocol-designer 6.2.0
schemaVersion: 6
protocolName: Plasmid Purification 48 Samples Using Machery Nagel Strip Kit
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 1}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 4}
  Opentrons 96 Tip Rack 300 µL (2): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 7}
  Filtrate Plate: {definitionId: custom_beta/4titude_96_wellplate_2200ul/1, location: 11}
  Colony Plate: {definitionId: custom_beta/4titude_96_wellplate_2200ul/1, location: 5}
  Reagents: {definitionId: custom_beta/starlab__22ml_reservoir_e2310_1200/1, location: 2}
  Filter Column Tube Plate: {definitionId: custom_beta/mn_squarewell_block_filter_tube_strips/1, location: 8}
  Buffer A4: {definitionId: opentrons/agilent_1_reservoir_290ml/1, location: 3}
pipetteTiprackAssignments:
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Buffer A1
  - Buffer A2
  - Buffer A3
  - Buffer A4
  - Colony Suspension: {serialize: true}
  - AW
  - Filtrate: {serialize: true}
  - Elution Buffer
ingredLocations:
  Filtrate Plate:
    Filtrate {volume: 850}: A2-H2, A4-H4, A6-H6, A8-H8, A10-H10, A12-H12
  Colony Plate:
    Colony Suspension {volume: 10}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  Reagents:
    Buffer A1 {volume: 14000}: A1, A2
    Buffer A2 {volume: 14000}: A3, A4
    Elution Buffer {volume: 4000}: A12
    Buffer A3 {volume: 10000}: A5-A8
  Buffer A4:
    Buffer A4 {volume: 150000}: A1
savedStepForms:
- stepType: pause
  stepName: set-up deck
  pauseAction: untilResume
  pauseMessage: Please set-up the deck as per the labware and liquids set-up. Spin the colony plate down to pellet the cells and decant the liquid media to the appropriate waste prior to placing the plate on the deck.
    Place the purple filter columns, column holder and square well block assembly in position 8.
- stepType: moveLiquid
  stepName: Transfer 250ul Buffer A1 to Colony Plate
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A1
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 150
  dispense_mmFromBottom: 1.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer 250ul Buffer A1 to Colony Plate
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A2
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A4-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 150
  dispense_mmFromBottom: 1.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer 250ul Buffer A2 to colony plate
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A3
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 150
  dispense_mmFromBottom: 1.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer 250ul Buffer A2 to colony plate
  pipette: p300_multi_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Reagents
  aspirate_wells: A4
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A4-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 150
  dispense_mmFromBottom: 1.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer 350ul Buffer A3 to colony plate
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: once
  aspirate_labware: Reagents
  aspirate_wells: A5
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A1-A3
  dispense_mmFromBottom: 45.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer 350ul Buffer A3 to colony plate
  pipette: p300_multi_gen2
  volume: 200
  path: single
  changeTip: once
  aspirate_labware: Reagents
  aspirate_wells: A6
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A4-A6
  dispense_mmFromBottom: 45.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer 350ul Buffer A3 to colony plate
  pipette: p300_multi_gen2
  volume: 150
  path: single
  changeTip: perDest
  aspirate_labware: Reagents
  aspirate_wells: A7
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A1-A3
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 250
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer 350ul Buffer A3 to colony plate
  pipette: p300_multi_gen2
  volume: 150
  path: single
  changeTip: perDest
  aspirate_labware: Reagents
  aspirate_wells: A8
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  aspirate_mmFromBottom: 4
  dispense_labware: Colony Plate
  dispense_wells: A4-A6
  dispense_mix_checkbox: true
  dispense_mix_times: 5
  dispense_mix_volume: 250
  dispense_mmFromBottom: 2.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: Transfer Samples to filter plate
  pipette: p300_multi_gen2
  volume: 850
  path: single
  changeTip: perSource
  aspirate_labware: Colony Plate
  aspirate_wells: A1-A6
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  aspirate_mmFromBottom: 1
  dispense_labware: Filter Column Tube Plate
  dispense_wells: A1-A6
  dispense_mmFromBottom: 20.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: Centrifuge filter plate for 4 mins at 3000g
  pauseAction: untilResume
  pauseMessage: Place the filter and plate assembly into a plate centrifuge and spin at 3000g for 4 mins.
    Remove the filter tubes and place the deep well plate containing the filtrate into position 6.
    Place a new DW plate with white binding columns in position 3.
- stepType: moveLiquid
  stepName: Transfer filtrate to binding columns
  pipette: p300_multi_gen2
  volume: 850
  path: single
  changeTip: perSource
  aspirate_labware: Filtrate Plate
  aspirate_wells: A2, A4, A6, A8, A10, A12
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  aspirate_mmFromBottom: 2
  dispense_labware: Filter Column Tube Plate
  dispense_wells: A1-A6
  dispense_mmFromBottom: 19.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: Centrifuge and discard flow through
  pauseAction: untilResume
  pauseMessage: Centrifuge at 3000g for 4 mins and discard the flow through to waste. Place back on the deck in position 8.
- stepType: pause
  stepName: Empty Tip waste
  pauseAction: untilResume
  pauseMessage: Empty tip waste and discard appropriately.
- stepType: moveLiquid
  stepName: add buffer A4 to binding columns
  pipette: p300_multi_gen2
  volume: 900
  path: single
  changeTip: once
  aspirate_labware: Buffer A4
  aspirate_wells: A1
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  aspirate_mmFromBottom: 3
  dispense_labware: Filter Column Tube Plate
  dispense_wells: A1-A6
  dispense_mmFromBottom: 28.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: Centrifuge binding columns A4 wash
  pauseAction: untilResume
  pauseMessage: Centrifuge at 3000g for 2 mins and discard flow through.
- stepType: moveLiquid
  stepName: Add Buffer A4 to binding columns
  pipette: p300_multi_gen2
  volume: 900
  path: single
  changeTip: once
  aspirate_labware: Buffer A4
  aspirate_wells: A1
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  aspirate_mmFromBottom: 3
  dispense_labware: Filter Column Tube Plate
  dispense_wells: A1-A6
  dispense_mmFromBottom: 29.5
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: pause
  stepName: Centrifuge binding columns A4 wash
  pauseAction: untilResume
  pauseMessage: Centrifuge at 3000g for 2 mins and discard flow through.
    Centrifuge again at 5600g for 10mins to remove any residual liquid.
    Place a 96 well plate into the square well block and place the tubes into the plate. Place back into position 8 on the deck.
- stepType: moveLiquid
  stepName: Add elution buffer to binding columns
  pipette: p300_multi_gen2
  volume: 50
  path: multiDispense
  changeTip: once
  aspirate_labware: Reagents
  aspirate_wells: A12
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  aspirate_mmFromBottom: 4
  dispense_labware: Filter Column Tube Plate
  dispense_wells: A1-A6
  dispense_mmFromBottom: 28.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_checkbox: true
  blowout_location: source_well
- stepType: pause
  stepName: Incubating at RT
  pauseAction: untilTime
  pauseMinute: 3
  pauseMessage: Incubate at RT for a minimum of 3 minutes.
- stepType: pause
  stepName: elution
  pauseAction: untilResume
  pauseMessage: Centrifuge at 3000g for 3 mins to elute the DNA
- stepType: pause
  stepName: complete
  pauseAction: untilResume
  pauseMessage: The protocol is now complete.
labwareDefinitions:
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  custom_beta/4titude_96_wellplate_2200ul/1:
    brand: {brand: 4titude, brandId: [4ti-0132]}
    metadata: {displayName: 4titude 2.2ml Deep Well Plate 4ti-0132, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.6, yDimension: 85.5, zDimension: 43.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 4titude_96_wellplate_2200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 40, totalLiquidVolume: 2200, shape: rectangular, xDimension: 7.8, yDimension: 7.8, x: 14.5, y: 74.5, z: 3.4}
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  custom_beta/starlab__22ml_reservoir_e2310_1200/1:
    brand: {brand: StarLab, brandId: [StarLab E2310-1200]}
    metadata: {displayName: StarLab 12 22ml Well Reservoir E2310-1200, displayCategory: reservoir, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 128, yDimension: 86, zDimension: 44.5}
    parameters: {format: irregular, quirks: [centerMultichannelOnWells, touchTipDisabled], isTiprack: false, isMagneticModuleCompatible: false, loadName: starlab__22ml_reservoir_e2310_1200}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 43, totalLiquidVolume: 22000, shape: rectangular, xDimension: 9.1, yDimension: 80, x: 15, y: 43, z: 1.5}
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  custom_beta/mn_squarewell_block_filter_tube_strips/1:
    brand: {brand: Machery Nagel, brandId: []}
    metadata: {displayName: MN_SquareWell_Block_Filter_TubeStrips, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 86, zDimension: 70}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: mn_squarewell_block_filter_tube_strips}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 25, totalLiquidVolume: 1000, shape: circular, diameter: 8.8, x: 22, y: 75, z: 45}
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commands:
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- delay: {message: Please set-up the deck as per the labware and liquids set-up. Spin the colony plate down to pellet the cells and decant the liquid media to the appropriate waste prior to placing the plate on the deck.
    Place the purple filter columns, column holder and square well block assembly in position 8., waitForResume: true}
- pickUpTip: {pipetteId: p300_multi_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_multi_gen2, volume: 250, labwareId: Reagents, wellName: A1, wellLocation: {origin: bottom, offset: {z: 4}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 250, labwareId: Colony Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1.5}}, flowRate: 94}
- aspirate: {pipetteId: p300_multi_gen2, volume: 150, labwareId: Colony Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1.5}}, flowRate: 94}
- dispense: {pipetteId: p300_multi_gen2, volume: 150, labwareId: Colony Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1.5}}, flowRate: 94}
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