opentrons/protocol-designer 6.2.0
schemaVersion: 6
protocolName: Transformation Spread - Plates 9 - 12
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 3}
  Plate 9: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 1}
  Plate 10: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 4}
  Plate 11: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 7}
  Sample Plate: {definitionId: custom_beta/4titude_96_wellplate_200ul/1, location: 6}
  Plate 12: {definitionId: opentrons/corning_6_wellplate_16.8ml_flat/1, location: 10}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Transformant
ingredLocations:
  Sample Plate:
    Transformant {volume: 52}: A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: pause
  stepName: Load
  pauseAction: untilResume
  pauseMessage: Set up the deck as per the plate layout.
- stepType: moveLiquid
  stepName: transfer plate 9
  pipette: p300_single_gen2
  volume: 52
  path: single
  changeTip: always
  aspirate_labware: Sample Plate
  aspirate_wells: A7-F7
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: Plate 9
  dispense_wells: A1, B1, A2, B2, A3, B3
  dispense_mmFromBottom: 8.5
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer plate 10
  pipette: p300_single_gen2
  volume: 52
  path: single
  changeTip: always
  aspirate_labware: Sample Plate
  aspirate_wells: G7, H7, A8-D8
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: Plate 10
  dispense_wells: A1, B1, A2, B2, A3, B3
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer plate 11
  pipette: p300_single_gen2
  volume: 52
  path: single
  changeTip: always
  aspirate_labware: Sample Plate
  aspirate_wells: E8-H8, A9, B9
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: Plate 11
  dispense_wells: A1, B1, A2, B2, A3, B3
  blowout_checkbox: true
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer plate 12
  pipette: p300_single_gen2
  volume: 52
  path: single
  changeTip: always
  aspirate_labware: Sample Plate
  aspirate_wells: C9-H9
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  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 3
  aspirate_airGap_checkbox: true
  aspirate_airGap_volume: 20
  dispense_labware: Plate 12
  dispense_wells: A1, B1, A2, B2, A3, B3
  blowout_checkbox: true
  blowout_location: Trash
- stepType: pause
  stepName: protocol complete
  pauseAction: untilResume
  pauseMessage: The protocol is now complete.
labwareDefinitions:
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  custom_beta/4titude_96_wellplate_200ul/1:
    brand: {brand: 4titude, brandId: [4ti-0960/C]}
    metadata: {displayName: 4ti-0960/C 96 Well Full Skirted Plate, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.48, zDimension: 16.1}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 4titude_96_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 15.1, totalLiquidVolume: 200, shape: circular, diameter: 5.5, x: 14.38, y: 74.24, z: 1}
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commands:
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- delay: {message: Set up the deck as per the plate layout., waitForResume: true}
- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 20, labwareId: Sample Plate, wellName: A7, wellLocation: {origin: bottom, offset: {z: 3}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 20, labwareId: Sample Plate, wellName: A7, wellLocation: {origin: bottom, offset: {z: 3}}, flowRate: 46.43}
- aspirate: {pipetteId: p300_single_gen2, volume: 20, labwareId: Sample Plate, wellName: A7, wellLocation: {origin: bottom, offset: {z: 3}}, flowRate: 46.43}
- dispense: {pipetteId: p300_single_gen2, volume: 20, labwareId: Sample Plate, wellName: A7, wellLocation: {origin: bottom, offset: {z: 3}}, flowRate: 46.43}
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