opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: 20230810_Transfer_384_to_96_well_plate_x96_CS_Quarter_2 v3
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: right}
modules:
  temperatureModuleV2: {location: 4}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 6}
  Outgrowth Plate: {definitionId: custom_beta/4ti0960_96_wellplate_200ul/1, location: 1}
  Media: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 5}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 9}
  384 plate_assembly: {definitionId: custom_beta/ab_384well_4310286/1, location: temperatureModuleV2}
  Opentrons 96 Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 3}
  Cells: {definitionId: opentrons/opentrons_96_aluminumblock_generic_pcr_strip_200ul/2, location: 7}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - LB
  - competent cells
  - Assembly
ingredLocations:
  Media:
    LB {volume: 5000}: A1
  Outgrowth Plate:
    LB {volume: 80}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  384 plate_assembly:
    Assembly {volume: 2}: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21, A22-P22, A23-P23, A24-P24
  Cells:
    competent cells {volume: 200}: A1-H1
savedStepForms:
- stepType: pause
  stepName: outgrowth plate
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Fill a 96 shallow well plate with 80ul of LB and place in position 1 for the outgrowth.
- stepType: pause
  stepName: assembly / ligation plate
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Add the assembly/ligation plate onto the temperature module in position 4.
- stepType: pause
  stepName: freeze block
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Put the cells in the aluminium block that has been previously frozen and place in position 7.
- stepType: temperature
  stepName: temperature
  stepDetails: add plate containing golden gate reaction in temperature block
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 4
- stepType: pause
  stepName: pause until 4 degrees
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseMessage: add 80 ul of LB to 96 well plate 6 columns
  pauseTemperature: 4
- stepType: moveLiquid
  stepName: transfer cells to assembly
  pipette: p20_multi_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Cells
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: 384 plate_assembly
  dispense_wells: A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12
  dispense_mmFromBottom: 1.5
- stepType: pause
  stepName: carry out heat shock
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: proceed to heat shock
- stepType: pause
  stepName: plate back on deck
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Place the plate back onto the deck in the temperature module
- stepType: moveLiquid
  stepName: transfer media to assembly
  pipette: p20_multi_gen2
  volume: 12
  path: single
  changeTip: always
  aspirate_labware: Media
  aspirate_wells: A1
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  dispense_labware: 384 plate_assembly
  dispense_wells: A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12
- stepType: pause
  stepName: centrifuge assembly plate
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: spin down assembly plate to ensure all liquid is at the bottom
- stepType: moveLiquid
  stepName: transfer from assembly to out growth plate
  pipette: p20_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: 384 plate_assembly
  aspirate_wells: A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12
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  dispense_labware: Outgrowth Plate
  dispense_wells: A1-A12
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Protocol complete.
labwareDefinitions:
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  custom_beta/4ti0960_96_wellplate_200ul/1:
    brand: {brand: 4ti_0960, brandId: [4ti]}
    metadata: {displayName: 4ti_0960 96 Well Plate 200 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 17}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 4ti0960_96_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 15, totalLiquidVolume: 200, shape: circular, diameter: 8, x: 14, y: 74, z: 2}
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  custom_beta/ab_384well_4310286/1:
    brand: {brand: AB, brandId: [4310286]}
    metadata: {displayName: AB 384 Well 4310286, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 10}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: ab_384well_4310286}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.1, totalLiquidVolume: 20, shape: circular, diameter: 3.2, x: 12.15, y: 76, z: 0.9}
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commands:
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- delay: {message: Fill a 96 shallow well plate with 80ul of LB and place in position 1 for the outgrowth., waitForResume: true}
- delay: {message: Add the assembly/ligation plate onto the temperature module in position 4., waitForResume: true}
- delay: {message: Put the cells in the aluminium block that has been previously frozen and place in position 7., waitForResume: true}
- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 4}
- temperatureModule/waitForTemperature: {moduleId: temperatureModuleV2, celsius: 4}
- pickUpTip: {pipetteId: p20_multi_gen2, labwareId: Opentrons 96 Tip Rack 20 µL (2), wellName: A1}
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