opentrons/protocol-designer 6.2.0
schemaVersion: 6
protocolName: Transfer Reagent Mix/Buffer and Eluate to 384 Well PCR Plate - 194 samples
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_multi_gen2: {mount: left}
  p20_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 8}
  384 Well Plate: {definitionId: custom_beta/ab_384well_4310286/1, location: 5}
  Plate 1 Strips 1-6: {definitionId: custom_beta/96wellpcrwith6tubestrips_48_wellplate_200ul/1, location: 1}
  Plate 2 Strips 1-6: {definitionId: custom_beta/96wellpcrwith6tubestrips_48_wellplate_200ul/1, location: 3}
  Plate 2 Strips 7-12: {definitionId: custom_beta/96wellpcrwith6tubestrips_48_wellplate_200ul/1, location: 6}
  Plate 1 Strips 7-12: {definitionId: custom_beta/96wellpcrwith6tubestrips_48_wellplate_200ul/1, location: 4}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 9}
  Opentrons 96 Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 7}
  MasterMix: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_2ml_safelock_snapcap/1, location: 2}
pipetteTiprackAssignments:
  p20_multi_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Eluate
  - Digest Mix
ingredLocations:
  Plate 1 Strips 1-6:
    Eluate {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  Plate 2 Strips 1-6:
    Eluate {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  Plate 2 Strips 7-12:
    Eluate {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  Plate 1 Strips 7-12:
    Eluate {volume: 50}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6
  MasterMix:
    Digest Mix {volume: 1500}: A1
savedStepForms:
- stepType: pause
  stepName: Deck Set-Up
  pauseAction: untilResume
  pauseMessage: Please set-up the deck as per the labware and liquid layout.
- stepType: moveLiquid
  stepName: transfer mm
  pipette: p20_single_gen2
  volume: 7
  path: multiDispense
  changeTip: once
  aspirate_labware: MasterMix
  aspirate_wells: A1
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  dispense_labware: 384 Well Plate
  dispense_wells: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12
  dispense_mmFromBottom: 3.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: source_well
- stepType: moveLiquid
  stepName: Plt 1 - 1
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 1-6
  aspirate_wells: A1
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A1
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 2
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 1-6
  aspirate_wells: A2
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B1
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 3
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 1-6
  aspirate_wells: A3
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A2
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 4
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 1-6
  aspirate_wells: A4
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B2
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 5
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 1-6
  aspirate_wells: A5
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A3
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 6
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 1-6
  aspirate_wells: A6
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B3
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 7
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 7-12
  aspirate_wells: A1
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A4
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 8
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 7-12
  aspirate_wells: A2
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B4
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 9
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 7-12
  aspirate_wells: A3
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A5
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 10
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 7-12
  aspirate_wells: A4
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B5
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 11
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 7-12
  aspirate_wells: A5
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A6
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 1 - 12
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 1 Strips 7-12
  aspirate_wells: A6
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B6
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 1
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 1-6
  aspirate_wells: A1
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A7
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 2
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 1-6
  aspirate_wells: A2
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B7
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 3
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 1-6
  aspirate_wells: A3
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A8
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 4
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 1-6
  aspirate_wells: A4
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B8
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 5
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 1-6
  aspirate_wells: A5
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A9
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 6
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 1-6
  aspirate_wells: A6
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B9
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 7
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 7-12
  aspirate_wells: A1
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A10
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 8
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 7-12
  aspirate_wells: A2
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B10
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 9
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 7-12
  aspirate_wells: A3
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A11
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 10
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 7-12
  aspirate_wells: A4
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B11
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 11
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 7-12
  aspirate_wells: A5
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: A12
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
- stepType: moveLiquid
  stepName: plt 2 - 12
  pipette: p20_multi_gen2
  volume: 3
  path: single
  changeTip: always
  aspirate_labware: Plate 2 Strips 7-12
  aspirate_wells: A6
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 10
  aspirate_mmFromBottom: 2
  dispense_labware: 384 Well Plate
  dispense_wells: B12
  dispense_flowRate: 20
  dispense_mmFromBottom: 1.5
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 5.1
labwareDefinitions:
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  custom_beta/ab_384well_4310286/1:
    brand: {brand: AB, brandId: [4310286]}
    metadata: {displayName: AB 384 Well 4310286, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 85, zDimension: 10}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: ab_384well_4310286}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.1, totalLiquidVolume: 20, shape: circular, diameter: 3.2, x: 12.15, y: 76, z: 0.9}
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  custom_beta/96wellpcrwith6tubestrips_48_wellplate_200ul/1:
    brand: {brand: 96_well_PCR_with_6_tube_strips, brandId: []}
    metadata: {displayName: 96_well_PCR_with_6_tube_strips 48 Well Plate 200 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127, yDimension: 86, zDimension: 26}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: 96wellpcrwith6tubestrips_48_wellplate_200ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 21, totalLiquidVolume: 200, shape: circular, diameter: 6, x: 15, y: 74, z: 5}
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commands:
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- delay: {message: Please set-up the deck as per the labware and liquid layout., waitForResume: true}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL (2), wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 15, labwareId: MasterMix, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 7, labwareId: 384 Well Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 3.5}}, flowRate: 3.78}
- touchTip: {pipetteId: p20_single_gen2, labwareId: 384 Well Plate, wellName: A1, wellLocation: {origin: bottom, offset: {z: 5.1}}}
- dispense: {pipetteId: p20_single_gen2, volume: 7, labwareId: 384 Well Plate, wellName: B1, wellLocation: {origin: bottom, offset: {z: 3.5}}, flowRate: 3.78}
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